PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $(1.0000, 1.0000, 1.0000)
  expName = Hippopolis_4AFCT
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Routines
  Routine fixation_cross
    TextComponent fx_cross
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent check_response
      Code Type = Auto->JS
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      Begin Routine:
        key = key_resp.keys
        response = 'invalid'

        if key == 'd':
            response = TestImage1Type
        elif key == 'f':
            response = TestImage2Type
        elif key == 'j':
            response = TestImage3Type
        elif key == 'k':
            response = TestImage4Type

        print(response)
        thisExp.addData('test_resp', response)
        if response == 'target':
            target += 1
        if response == 'lure':
            lure += 1
        if response == 'dist1':
            dist1 += 1
        if response == 'dist2':
            dist2 += 1
  Routine city_name
    TextComponent cityname_text
      color = black
      letterHeight = 48
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    ImageComponent city_image
      image [set every repeat] = $CityImage
      pos = (0, -100)
      size = (1200, 630)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent count_responses
      Code Type = Auto->JS
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      Begin Experiment:
        target = 0
        lure = 0
        dist1 = 0
        dist2 = 0
      Begin Routine:
        target = 0
        lure = 0
        dist1 = 0
        dist2 = 0
  Routine take_a_break
    TextComponent break_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Szünet....

        A folytatáshoz nyomja le a SZÓKÖZ billentyűt.
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent save_responses
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('n_targets', target)
        thisExp.addData('n_lures', lure)
        thisExp.addData('n_dist1s', dist1)
        thisExp.addData('n_dist2s', dist2)
  Routine prediction_phase
    ImageComponent plate
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent city_text
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    TextComponent street_text
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Cue
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    TextComponent fx_cross_prediction
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = +
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  Routine test_trial
    ImageComponent plate_updating
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent city_text_updating
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $CityName
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    TextComponent street_text_updating
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $Cue
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    ImageComponent test_image1
      image [set every repeat] = $TestImage1
      pos = (-512, 0)
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent test_image2
      image [set every repeat] = $TestImage2
      pos = (-192, 0)
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent test_image3
      image [set every repeat] = $TestImage3
      pos = (192, 0)
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent test_image4
      image [set every repeat] = $TestImage4
      pos = (512, 0)
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent button_d
      image = stimuli\test_4afc_d.png
      pos = (-512, -350)
      size = (99, 94)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent button_f
      image = stimuli\test_4afc_f.png
      pos = (-192,-350)
      size = (99, 94)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent button_j
      image = stimuli\test_4afc_j.png
      pos = (192, -350)
      size = (99, 94)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent button_k
      image = stimuli\test_4afc_k.png
      pos = (512, -350)
      size = (99, 94)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = 'd', 'f', 'j', 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine setup
    CodeComponent selct_file
      Code Type = Auto->JS
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      Begin Experiment:
        ID = expInfo['participant']
        city_list = './stimuli/subj_files/' + ID + '_city_list.csv'
Flow
  Routine setup
  LoopInitiator CityBlock loopType="TrialHandler"
    conditionsFile = $city_list
    isTrials = False
    loopType = random
    nReps = 1
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    Routine city_name
    LoopInitiator LearningTrials loopType="TrialHandler"
      conditionsFile = $StimuliFile
      loopType = random
      nReps = 1
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      Routine test_trial
      Routine fixation_cross
    LoopTerminator LearningTrials
    Routine take_a_break
  LoopTerminator CityBlock
