PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $(1.0000, 1.0000, 1.0000)
  expName = Hippopolis_Learning
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Routines
  Routine learning_trial
    ImageComponent plate
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent city_text
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    TextComponent street_text
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Cue
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    ImageComponent learning_image
      image [set every repeat] = $Image
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine fixation_cross
    TextComponent fx_cross
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine city_name
    TextComponent cityname_text
      color = black
      letterHeight = 48
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    ImageComponent city_image
      image [set every repeat] = $CityImage
      pos = (0, -100)
      size = (1200, 630)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine test_trial
    ImageComponent plate_test
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent city_text_test
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $CityName
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    TextComponent street_text_test
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Cue
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    TextComponent test_question
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Fel tudja idézni a képet?
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    KeyboardComponent test_key_resp
      allowedKeys = 'left','right'
      correctAns = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent button_image
      image = stimuli\buttons.png
      pos = (0, -200)
      size = (660, 312)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine take_a_break
    TextComponent break_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Szünet....

        A folytatáshoz nyomja le a SZÓKÖZ billentyűt.
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_intro
    TextComponent test_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        A teszt következik.

        A folytatáshoz nyomja le a SZÓKÖZ gombot.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine verbal_test
    CodeComponent dice_roll
      Code Type = Auto->JS
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      Begin Experiment:
        import random as rnd
      Begin Routine:
        if test_key_resp.keys=='right':
            print('Remembered trial.')
            dice = rnd.randint(1,10)
            print(dice)
            if dice < 8:
                continueRoutine = False
        else:
            print('Not remembered trial.')
            continueRoutine = False
    ImageComponent plate_verbal
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
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    TextComponent street_text_verbal
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Cue
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    TextComponent city_text_verbal
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CityName
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    TextComponent question_verbal
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Írja körül, mit látott a képen.

        A folytatáshoz nyomja le a SZÓKÖZ gombot.
    KeyboardComponent verbal_test_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent select_file
      Code Type = Auto->JS
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      Begin Experiment:
        ID = expInfo['participant']
        city_list = './stimuli/subj_files/' + ID + '_city_list.csv'
Flow
  Routine setup
  LoopInitiator CityBlock loopType="TrialHandler"
    conditionsFile = $city_list
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine city_name
    LoopInitiator LearningTrials loopType="TrialHandler"
      conditionsFile = $StimuliFile
      loopType = random
      nReps = 1
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      Routine learning_trial
      Routine fixation_cross
    LoopTerminator LearningTrials
    Routine test_intro
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $StimuliFile
      loopType = random
      nReps = 1
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      Routine test_trial
      Routine verbal_test
      Routine fixation_cross
    LoopTerminator trials
    Routine take_a_break
  LoopTerminator CityBlock
